PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word priming experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'girl'},
      {'study_word': 'bottle'},
      {'study_word': 'glass'},
      {'study_word': 'ring'},
      {'study_word': 'fan'},
      {'study_word': 'teddy'},
      {'study_word': 'door'},
      {'study_word': 'window'},
      {'study_word': 'car'},
      {'study_word': 'frame'},
      {'study_word': 'bus'},
      {'study_word': 'blanket'},
      {'study_word': 'bag'},
      {'study_word': 'shoes'},
      {'study_word': 'water'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_h_o_n'},
      {'test': '_ia_n_'},
      {'test': '_ea_o_'},
      {'test': 'c_m_r_'},
      {'test': '_p_a_d_'},
      {'test': '_o_s_'},
      {'test': 'o_a_n_e'},
      {'test': '_u_'},
      {'test': 'p_o_e'},
      {'test': '_ar'},
      {'test': '_l_p_a_t'},
      {'test': 's_o__'},
      {'test': '_e_dy'},
      {'test': '_ra_n'},
      {'test': 'b_g'},
      {'test': 'w_t__'},
      {'test': 'd__t_n'}]
    Routine test
  LoopTerminator trials_2
